PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = EmotStaircase
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Routines
  Routine Ans
    TextComponent Answer
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ANGRY (L arrow key) or HAPPY (R arrow key)
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine late
    TextComponent youweretoolate
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.5
      text = YOU WERE TOO LATE
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    CodeComponent late_cd
      Code Type = Both
      Each Frame:
        if key_resp.keys != 'left' and key_resp.keys != 'right':
            continueRoutine=True

        if key_sliderConf.keys == "space" or sliderConf.getRating() != undefined:
            continueRoutine=False
      Each JS Frame:
        if ((key_resp.keys !== "left") && (key_resp.keys !== "right")) {
            continueRoutine = true;
        }

        if ((key_sliderConf.keys === "space") || (sliderConf.getRating() !== undefined)) {
            continueRoutine = false;
        }
  Routine _1_5
    CodeComponent blank_code
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData("Stimulus", Stim);
        psychoJS.experiment.addData("Correctness", corrAns[corrAns.length-1]);
        psychoJS.experiment.addData("Reverse", Reverse);
        psychoJS.experiment.addData("StepSize", step);

        if (key_resp.keys === 'left') {
            psychoJS.experiment.addData('EmotResponse','Angry');
        } else if (key_resp.keys === 'right') {
            psychoJS.experiment.addData('EmotResponse','Happy');
        } else {
            psychoJS.experiment.addData('EmotResponse','NA');
        }

        psychoJS.experiment.addData("Gender", Gender[trial_G]);

        trial = trial + 1;

        if (corrAns[corrAns.length-1] != 'NA') {
            trial_G = trial_G + 1;
        }

        if (trial < 30) {
            Stimuli=eval("Stimuli_"+Gender[trial_G])
            Stim=Stimuli[startVal][0];
        }
      Begin Routine:
        # add some data for this trial
        thisExp.addData('Stimulus', Stim)
        thisExp.addData('Correctness', corrAns[-1])
        thisExp.addData('Reverse', Reverse)
        thisExp.addData('StepSize', step)

        if key_resp.keys == 'left':
            thisExp.addData('EmotResponse','Angry')
        elif key_resp.keys == 'right':
            thisExp.addData('EmotResponse','Happy')
        else:
            thisExp.addData('EmotResponse','NA')

        thisExp.addData("Gender", Gender[trial_G])
        # end of trial - move to next line in data output
        # thisExp.nextEntry()

        #print("trial before  ", trial)
        trial=trial+1
        #print("trial after add  ", trial)

        #print("trial_G before  ", trial_G)
        if corrAns[-1] != 'NA':
            trial_G=trial_G+1
        #print("trial_G after add  ", trial_G)


        if trial < 30:
            Stimuli=eval('Stimuli_'+Gender[trial_G])
            Stim=Stimuli[startVal][0]
        #print("Stim ", Stim)
        #print('\n')
      Each Frame:
        if trial_G == 30:
            continueRoutine=False
      Each JS Frame:
        if (trial_G === 30) {
            continueRoutine = false;
        }
      End JS Routine:
        console.log('before sliderConf.getRating()..  ',sliderConf.getRating());
        console.log('after sliderConf.getRating()..  ',sliderConf.getRating());
    TextComponent Blank
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine End
    TextComponent End_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have completed the session. Thank you!

        Press Space to finish
    KeyboardComponent End_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start
    TextComponent Start_exp
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        We aim to investigate how people discriminate between happy and angry facial expressions.

        You will have to decide within 2 seconds if the face briefly presented on each trial is angry or happy.

        ANGRY - Left arrow key     |     HAPPY - Right arrow key

        Then, you will have to rate within 3 seconds how confident you are in your judgement using a slider from 1 to 100, with indicators Unsure (1), Somewhat sure (34), Fairly sure (67), Very sure(100).

        The run consists of 60 trials, with a short break after the first 30 trials, and will take about 5 minutes.

        Press ''Space'' to start...
    KeyboardComponent Start_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Start_code
      Code Type = Both
      Begin Experiment:
        import random

        Stimuli_F=[['f_000.png','Happy',0,'F'],['f_001.png','Happy',1,'F'],['f_002.png','Happy',2,'F'],['f_003.png','Happy',3,'F'],['f_004.png','Happy',4,'F'],['f_005.png','Happy',5,'F'],['f_006.png','Happy',6,'F'],['f_007.png','Happy',7,'F'],['f_008.png','Happy',8,'F'],['f_009.png','Happy',9,'F'],['f_010.png','Happy',10,'F'],['f_011.png','Happy',11,'F'],['f_012.png','Happy',12,'F'],['f_013.png','Happy',13,'F'],['f_014.png','Happy',14,'F'],['f_015.png','Happy',15,'F'],['f_016.png','Happy',16,'F'],['f_017.png','Happy',17,'F'],['f_018.png','Happy',18,'F'],['f_019.png','Happy',19,'F'],
        ['f_020.png','Happy',20,'F'],['f_021.png','Happy',21,'F'],['f_022.png','Happy',22,'F'],['f_023.png','Happy',23,'F'],['f_024.png','Happy',24,'F'],['f_025.png','Happy',25,'F'],['f_026.png','Happy',26,'F'],['f_027.png','Happy',27,'F'],['f_028.png','Happy',28,'F'],['f_029.png','Happy',29,'F'],['f_030.png','Happy',30,'F'],['f_031.png','Happy',31,'F'],['f_032.png','Happy',32,'F'],['f_033.png','Happy',33,'F'],['f_034.png','Happy',34,'F'],['f_035.png','Happy',35,'F'],['f_036.png','Happy',36,'F'],['f_037.png','Happy',37,'F'],['f_038.png','Happy',38,'F'],['f_039.png','Happy',39,'F'],
        ['f_040.png','Happy',40,'F'],['f_041.png','Happy',41,'F'],['f_042.png','Happy',42,'F'],['f_043.png','Happy',43,'F'],['f_044.png','Happy',44,'F'],['f_045.png','Happy',45,'F'],['f_046.png','Happy',46,'F'],['f_047.png','Happy',47,'F'],['f_048.png','Happy',48,'F'],['f_049.png','Happy',49,'F'],['f_050.png','Happy',50,'F'],['f_051.png','Happy',51,'F'],['f_052.png','Happy',52,'F'],['f_053.png','Happy',53,'F'],['f_054.png','Happy',54,'F'],['f_055.png','Happy',55,'F'],['f_056.png','Happy',56,'F'],['f_057.png','Happy',57,'F'],['f_058.png','Happy',58,'F'],['f_059.png','Happy',59,'F'],
        ['f_060.png','Happy',60,'F'],['f_061.png','Happy',61,'F'],['f_062.png','Happy',62,'F'],['f_063.png','Happy',63,'F'],['f_064.png','Happy',64,'F'],['f_065.png','Happy',65,'F'],['f_066.png','Happy',66,'F'],['f_067.png','Happy',67,'F'],['f_068.png','Happy',68,'F'],['f_069.png','Happy',69,'F'],['f_070.png','Happy',70,'F'],['f_071.png','Happy',71,'F'],['f_072.png','Happy',72,'F'],['f_073.png','Happy',73,'F'],['f_074.png','Happy',74,'F'],['f_075.png','Happy',75,'F'],['f_076.png','Happy',76,'F'],['f_077.png','Happy',77,'F'],['f_078.png','Happy',78,'F'],['f_079.png','Happy',79,'F'],
        ['f_080.png','Happy',80,'F'],['f_081.png','Happy',81,'F'],['f_082.png','Happy',82,'F'],['f_083.png','Happy',83,'F'],['f_084.png','Happy',84,'F'],['f_085.png','Happy',85,'F'],['f_086.png','Happy',86,'F'],['f_087.png','Happy',87,'F'],['f_088.png','Happy',88,'F'],['f_089.png','Happy',89,'F'],['f_090.png','Happy',90,'F'],['f_091.png','Happy',91,'F'],['f_092.png','Happy',92,'F'],['f_093.png','Happy',93,'F'],['f_094.png','Happy',94,'F'],['f_095.png','Happy',95,'F'],['f_096.png','Happy',96,'F'],['f_097.png','Happy',97,'F'],['f_098.png','Happy',98,'F'],['f_099.png','Happy',99,'F'],
        ['f_101.png','Angry',101,'F'],['f_102.png','Angry',102,'F'],['f_103.png','Angry',103,'F'],['f_104.png','Angry',104,'F'],['f_105.png','Angry',105,'F'],['f_106.png','Angry',106,'F'],['f_107.png','Angry',107,'F'],['f_108.png','Angry',108,'F'],['f_109.png','Angry',109,'F'],['f_110.png','Angry',110,'F'],['f_111.png','Angry',111,'F'],['f_112.png','Angry',112,'F'],['f_113.png','Angry',113,'F'],['f_114.png','Angry',114,'F'],['f_115.png','Angry',115,'F'],['f_116.png','Angry',116,'F'],['f_117.png','Angry',117,'F'],['f_118.png','Angry',118,'F'],['f_119.png','Angry',119,'F'],['f_120.png','Angry',120,'F'],
        ['f_121.png','Angry',121,'F'],['f_122.png','Angry',122,'F'],['f_123.png','Angry',123,'F'],['f_124.png','Angry',124,'F'],['f_125.png','Angry',125,'F'],['f_126.png','Angry',126,'F'],['f_127.png','Angry',127,'F'],['f_128.png','Angry',128,'F'],['f_129.png','Angry',129,'F'],['f_130.png','Angry',130,'F'],['f_131.png','Angry',131,'F'],['f_132.png','Angry',132,'F'],['f_133.png','Angry',133,'F'],['f_134.png','Angry',134,'F'],['f_135.png','Angry',135,'F'],['f_136.png','Angry',136,'F'],['f_137.png','Angry',137,'F'],['f_138.png','Angry',138,'F'],['f_139.png','Angry',139,'F'],['f_140.png','Angry',140,'F'],
        ['f_141.png','Angry',141,'F'],['f_142.png','Angry',142,'F'],['f_143.png','Angry',143,'F'],['f_144.png','Angry',144,'F'],['f_145.png','Angry',145,'F'],['f_146.png','Angry',146,'F'],['f_147.png','Angry',147,'F'],['f_148.png','Angry',148,'F'],['f_149.png','Angry',149,'F'],['f_150.png','Angry',150,'F'],['f_151.png','Angry',151,'F'],['f_152.png','Angry',152,'F'],['f_153.png','Angry',153,'F'],['f_154.png','Angry',154,'F'],['f_155.png','Angry',155,'F'],['f_156.png','Angry',156,'F'],['f_157.png','Angry',157,'F'],['f_158.png','Angry',158,'F'],['f_159.png','Angry',159,'F'],['f_160.png','Angry',160,'F'],
        ['f_161.png','Angry',161,'F'],['f_162.png','Angry',162,'F'],['f_163.png','Angry',163,'F'],['f_164.png','Angry',164,'F'],['f_165.png','Angry',165,'F'],['f_166.png','Angry',166,'F'],['f_167.png','Angry',167,'F'],['f_168.png','Angry',168,'F'],['f_169.png','Angry',169,'F'],['f_170.png','Angry',170,'F'],['f_171.png','Angry',171,'F'],['f_172.png','Angry',172,'F'],['f_173.png','Angry',173,'F'],['f_174.png','Angry',174,'F'],['f_175.png','Angry',175,'F'],['f_176.png','Angry',176,'F'],['f_177.png','Angry',177,'F'],['f_178.png','Angry',178,'F'],['f_179.png','Angry',179,'F'],['f_180.png','Angry',180,'F'],
        ['f_181.png','Angry',181,'F'],['f_182.png','Angry',182,'F'],['f_183.png','Angry',183,'F'],['f_184.png','Angry',184,'F'],['f_185.png','Angry',185,'F'],['f_186.png','Angry',186,'F'],['f_187.png','Angry',187,'F'],['f_188.png','Angry',188,'F'],['f_189.png','Angry',189,'F'],['f_190.png','Angry',190,'F'],['f_191.png','Angry',191,'F'],['f_192.png','Angry',192,'F'],['f_193.png','Angry',193,'F'],['f_194.png','Angry',194,'F'],['f_195.png','Angry',195,'F'],['f_196.png','Angry',196,'F'],['f_197.png','Angry',197,'F'],['f_198.png','Angry',198,'F'],['f_199.png','Angry',199,'F'],['f_200.png','Angry',200,'F']]

        Stimuli_M=[['m_000.png','Happy',0,'M'],['m_001.png','Happy',1,'M'],['m_002.png','Happy',2,'M'],['m_003.png','Happy',3,'M'],['m_004.png','Happy',4,'M'],['m_005.png','Happy',5,'M'],['m_006.png','Happy',6,'M'],['m_007.png','Happy',7,'M'],['m_008.png','Happy',8,'M'],['m_009.png','Happy',9,'M'],['m_010.png','Happy',10,'M'],['m_011.png','Happy',11,'M'],['m_012.png','Happy',12,'M'],['m_013.png','Happy',13,'M'],['m_014.png','Happy',14,'M'],['m_015.png','Happy',15,'M'],['m_016.png','Happy',16,'M'],['m_017.png','Happy',17,'M'],['m_018.png','Happy',18,'M'],['m_019.png','Happy',19,'M'],
        ['m_020.png','Happy',20,'M'],['m_021.png','Happy',21,'M'],['m_022.png','Happy',22,'M'],['m_023.png','Happy',23,'M'],['m_024.png','Happy',24,'M'],['m_025.png','Happy',25,'M'],['m_026.png','Happy',26,'M'],['m_027.png','Happy',27,'M'],['m_028.png','Happy',28,'M'],['m_029.png','Happy',29,'M'],['m_030.png','Happy',30,'M'],['m_031.png','Happy',31,'M'],['m_032.png','Happy',32,'M'],['m_033.png','Happy',33,'M'],['m_034.png','Happy',34,'M'],['m_035.png','Happy',35,'M'],['m_036.png','Happy',36,'M'],['m_037.png','Happy',37,'M'],['m_038.png','Happy',38,'M'],['m_039.png','Happy',39,'M'],
        ['m_040.png','Happy',40,'M'],['m_041.png','Happy',41,'M'],['m_042.png','Happy',42,'M'],['m_043.png','Happy',43,'M'],['m_044.png','Happy',44,'M'],['m_045.png','Happy',45,'M'],['m_046.png','Happy',46,'M'],['m_047.png','Happy',47,'M'],['m_048.png','Happy',48,'M'],['m_049.png','Happy',49,'M'],['m_050.png','Happy',50,'M'],['m_051.png','Happy',51,'M'],['m_052.png','Happy',52,'M'],['m_053.png','Happy',53,'M'],['m_054.png','Happy',54,'M'],['m_055.png','Happy',55,'M'],['m_056.png','Happy',56,'M'],['m_057.png','Happy',57,'M'],['m_058.png','Happy',58,'M'],['m_059.png','Happy',59,'M'],
        ['m_060.png','Happy',60,'M'],['m_061.png','Happy',61,'M'],['m_062.png','Happy',62,'M'],['m_063.png','Happy',63,'M'],['m_064.png','Happy',64,'M'],['m_065.png','Happy',65,'M'],['m_066.png','Happy',66,'M'],['m_067.png','Happy',67,'M'],['m_068.png','Happy',68,'M'],['m_069.png','Happy',69,'M'],['m_070.png','Happy',70,'M'],['m_071.png','Happy',71,'M'],['m_072.png','Happy',72,'M'],['m_073.png','Happy',73,'M'],['m_074.png','Happy',74,'M'],['m_075.png','Happy',75,'M'],['m_076.png','Happy',76,'M'],['m_077.png','Happy',77,'M'],['m_078.png','Happy',78,'M'],['m_079.png','Happy',79,'M'],
        ['m_080.png','Happy',80,'M'],['m_081.png','Happy',81,'M'],['m_082.png','Happy',82,'M'],['m_083.png','Happy',83,'M'],['m_084.png','Happy',84,'M'],['m_085.png','Happy',85,'M'],['m_086.png','Happy',86,'M'],['m_087.png','Happy',87,'M'],['m_088.png','Happy',88,'M'],['m_089.png','Happy',89,'M'],['m_090.png','Happy',90,'M'],['m_091.png','Happy',91,'M'],['m_092.png','Happy',92,'M'],['m_093.png','Happy',93,'M'],['m_094.png','Happy',94,'M'],['m_095.png','Happy',95,'M'],['m_096.png','Happy',96,'M'],['m_097.png','Happy',97,'M'],['m_098.png','Happy',98,'M'],['m_099.png','Happy',99,'M'],
        ['m_101.png','Angry',101,'M'],['m_102.png','Angry',102,'M'],['m_103.png','Angry',103,'M'],['m_104.png','Angry',104,'M'],['m_105.png','Angry',105,'M'],['m_106.png','Angry',106,'M'],['m_107.png','Angry',107,'M'],['m_108.png','Angry',108,'M'],['m_109.png','Angry',109,'M'],['m_110.png','Angry',110,'M'],['m_111.png','Angry',111,'M'],['m_112.png','Angry',112,'M'],['m_113.png','Angry',113,'M'],['m_114.png','Angry',114,'M'],['m_115.png','Angry',115,'M'],['m_116.png','Angry',116,'M'],['m_117.png','Angry',117,'M'],['m_118.png','Angry',118,'M'],['m_119.png','Angry',119,'M'],['m_120.png','Angry',120,'M'],
        ['m_121.png','Angry',121,'M'],['m_122.png','Angry',122,'M'],['m_123.png','Angry',123,'M'],['m_124.png','Angry',124,'M'],['m_125.png','Angry',125,'M'],['m_126.png','Angry',126,'M'],['m_127.png','Angry',127,'M'],['m_128.png','Angry',128,'M'],['m_129.png','Angry',129,'M'],['m_130.png','Angry',130,'M'],['m_131.png','Angry',131,'M'],['m_132.png','Angry',132,'M'],['m_133.png','Angry',133,'M'],['m_134.png','Angry',134,'M'],['m_135.png','Angry',135,'M'],['m_136.png','Angry',136,'M'],['m_137.png','Angry',137,'M'],['m_138.png','Angry',138,'M'],['m_139.png','Angry',139,'M'],['m_140.png','Angry',140,'M'],
        ['m_141.png','Angry',141,'M'],['m_142.png','Angry',142,'M'],['m_143.png','Angry',143,'M'],['m_144.png','Angry',144,'M'],['m_145.png','Angry',145,'M'],['m_146.png','Angry',146,'M'],['m_147.png','Angry',147,'M'],['m_148.png','Angry',148,'M'],['m_149.png','Angry',149,'M'],['m_150.png','Angry',150,'M'],['m_151.png','Angry',151,'M'],['m_152.png','Angry',152,'M'],['m_153.png','Angry',153,'M'],['m_154.png','Angry',154,'M'],['m_155.png','Angry',155,'M'],['m_156.png','Angry',156,'M'],['m_157.png','Angry',157,'M'],['m_158.png','Angry',158,'M'],['m_159.png','Angry',159,'M'],['m_160.png','Angry',160,'M'],
        ['m_161.png','Angry',161,'M'],['m_162.png','Angry',162,'M'],['m_163.png','Angry',163,'M'],['m_164.png','Angry',164,'M'],['m_165.png','Angry',165,'M'],['m_166.png','Angry',166,'M'],['m_167.png','Angry',167,'M'],['m_168.png','Angry',168,'M'],['m_169.png','Angry',169,'M'],['m_170.png','Angry',170,'M'],['m_171.png','Angry',171,'M'],['m_172.png','Angry',172,'M'],['m_173.png','Angry',173,'M'],['m_174.png','Angry',174,'M'],['m_175.png','Angry',175,'M'],['m_176.png','Angry',176,'M'],['m_177.png','Angry',177,'M'],['m_178.png','Angry',178,'M'],['m_179.png','Angry',179,'M'],['m_180.png','Angry',180,'M'],
        ['m_181.png','Angry',181,'M'],['m_182.png','Angry',182,'M'],['m_183.png','Angry',183,'M'],['m_184.png','Angry',184,'M'],['m_185.png','Angry',185,'M'],['m_186.png','Angry',186,'M'],['m_187.png','Angry',187,'M'],['m_188.png','Angry',188,'M'],['m_189.png','Angry',189,'M'],['m_190.png','Angry',190,'M'],['m_191.png','Angry',191,'M'],['m_192.png','Angry',192,'M'],['m_193.png','Angry',193,'M'],['m_194.png','Angry',194,'M'],['m_195.png','Angry',195,'M'],['m_196.png','Angry',196,'M'],['m_197.png','Angry',197,'M'],['m_198.png','Angry',198,'M'],['m_199.png','Angry',199,'M'],['m_200.png','Angry',200,'M']]

        Stimuli=[]

        Emot=["Happy","Angry"]
        random.shuffle(Emot)
        #print("Emot..  ", Emot)
        Emotion=0

        Gender=["F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M"]
        random.shuffle(Gender)
        #print("Gender",Gender)

        trial_G=0
        trial=0

        startVal_Happy=16   # which is the starting value for Happy
        startVal_Angry=185   # which is the starting value for Angry

        startVal=eval('startVal_'+Emot[Emotion])

        Stimuli=eval('Stimuli_'+Gender[trial_G])

        Stim=[]

        Stim=Stimuli[startVal][0]

        Intensity=[]

        corrAns=[]
        Correctness=[]
        Correctness_Int=[]
        Reverse=0
        step_sizes=[32,16,8,6,4,2]
        step=step_sizes[0]
      Begin JS Experiment:
        function shuffle(arra1) {
            var ctr = arra1.length, temp, index;
            while (ctr > 0) {
                index = Math.floor(Math.random() * ctr);
                ctr--;
                temp = arra1[ctr];
                arra1[ctr] = arra1[index];
                arra1[index] = temp;
            }
            return arra1;
        }


        Stimuli_F=[['f_000.png','Happy',0,'F'],['f_001.png','Happy',1,'F'],['f_002.png','Happy',2,'F'],['f_003.png','Happy',3,'F'],['f_004.png','Happy',4,'F'],['f_005.png','Happy',5,'F'],['f_006.png','Happy',6,'F'],['f_007.png','Happy',7,'F'],['f_008.png','Happy',8,'F'],['f_009.png','Happy',9,'F'],['f_010.png','Happy',10,'F'],['f_011.png','Happy',11,'F'],['f_012.png','Happy',12,'F'],['f_013.png','Happy',13,'F'],['f_014.png','Happy',14,'F'],['f_015.png','Happy',15,'F'],['f_016.png','Happy',16,'F'],['f_017.png','Happy',17,'F'],['f_018.png','Happy',18,'F'],['f_019.png','Happy',19,'F'],
        ['f_020.png','Happy',20,'F'],['f_021.png','Happy',21,'F'],['f_022.png','Happy',22,'F'],['f_023.png','Happy',23,'F'],['f_024.png','Happy',24,'F'],['f_025.png','Happy',25,'F'],['f_026.png','Happy',26,'F'],['f_027.png','Happy',27,'F'],['f_028.png','Happy',28,'F'],['f_029.png','Happy',29,'F'],['f_030.png','Happy',30,'F'],['f_031.png','Happy',31,'F'],['f_032.png','Happy',32,'F'],['f_033.png','Happy',33,'F'],['f_034.png','Happy',34,'F'],['f_035.png','Happy',35,'F'],['f_036.png','Happy',36,'F'],['f_037.png','Happy',37,'F'],['f_038.png','Happy',38,'F'],['f_039.png','Happy',39,'F'],
        ['f_040.png','Happy',40,'F'],['f_041.png','Happy',41,'F'],['f_042.png','Happy',42,'F'],['f_043.png','Happy',43,'F'],['f_044.png','Happy',44,'F'],['f_045.png','Happy',45,'F'],['f_046.png','Happy',46,'F'],['f_047.png','Happy',47,'F'],['f_048.png','Happy',48,'F'],['f_049.png','Happy',49,'F'],['f_050.png','Happy',50,'F'],['f_051.png','Happy',51,'F'],['f_052.png','Happy',52,'F'],['f_053.png','Happy',53,'F'],['f_054.png','Happy',54,'F'],['f_055.png','Happy',55,'F'],['f_056.png','Happy',56,'F'],['f_057.png','Happy',57,'F'],['f_058.png','Happy',58,'F'],['f_059.png','Happy',59,'F'],
        ['f_060.png','Happy',60,'F'],['f_061.png','Happy',61,'F'],['f_062.png','Happy',62,'F'],['f_063.png','Happy',63,'F'],['f_064.png','Happy',64,'F'],['f_065.png','Happy',65,'F'],['f_066.png','Happy',66,'F'],['f_067.png','Happy',67,'F'],['f_068.png','Happy',68,'F'],['f_069.png','Happy',69,'F'],['f_070.png','Happy',70,'F'],['f_071.png','Happy',71,'F'],['f_072.png','Happy',72,'F'],['f_073.png','Happy',73,'F'],['f_074.png','Happy',74,'F'],['f_075.png','Happy',75,'F'],['f_076.png','Happy',76,'F'],['f_077.png','Happy',77,'F'],['f_078.png','Happy',78,'F'],['f_079.png','Happy',79,'F'],
        ['f_080.png','Happy',80,'F'],['f_081.png','Happy',81,'F'],['f_082.png','Happy',82,'F'],['f_083.png','Happy',83,'F'],['f_084.png','Happy',84,'F'],['f_085.png','Happy',85,'F'],['f_086.png','Happy',86,'F'],['f_087.png','Happy',87,'F'],['f_088.png','Happy',88,'F'],['f_089.png','Happy',89,'F'],['f_090.png','Happy',90,'F'],['f_091.png','Happy',91,'F'],['f_092.png','Happy',92,'F'],['f_093.png','Happy',93,'F'],['f_094.png','Happy',94,'F'],['f_095.png','Happy',95,'F'],['f_096.png','Happy',96,'F'],['f_097.png','Happy',97,'F'],['f_098.png','Happy',98,'F'],['f_099.png','Happy',99,'F'],
        ['f_101.png','Angry',101,'F'],['f_102.png','Angry',102,'F'],['f_103.png','Angry',103,'F'],['f_104.png','Angry',104,'F'],['f_105.png','Angry',105,'F'],['f_106.png','Angry',106,'F'],['f_107.png','Angry',107,'F'],['f_108.png','Angry',108,'F'],['f_109.png','Angry',109,'F'],['f_110.png','Angry',110,'F'],['f_111.png','Angry',111,'F'],['f_112.png','Angry',112,'F'],['f_113.png','Angry',113,'F'],['f_114.png','Angry',114,'F'],['f_115.png','Angry',115,'F'],['f_116.png','Angry',116,'F'],['f_117.png','Angry',117,'F'],['f_118.png','Angry',118,'F'],['f_119.png','Angry',119,'F'],['f_120.png','Angry',120,'F'],
        ['f_121.png','Angry',121,'F'],['f_122.png','Angry',122,'F'],['f_123.png','Angry',123,'F'],['f_124.png','Angry',124,'F'],['f_125.png','Angry',125,'F'],['f_126.png','Angry',126,'F'],['f_127.png','Angry',127,'F'],['f_128.png','Angry',128,'F'],['f_129.png','Angry',129,'F'],['f_130.png','Angry',130,'F'],['f_131.png','Angry',131,'F'],['f_132.png','Angry',132,'F'],['f_133.png','Angry',133,'F'],['f_134.png','Angry',134,'F'],['f_135.png','Angry',135,'F'],['f_136.png','Angry',136,'F'],['f_137.png','Angry',137,'F'],['f_138.png','Angry',138,'F'],['f_139.png','Angry',139,'F'],['f_140.png','Angry',140,'F'],
        ['f_141.png','Angry',141,'F'],['f_142.png','Angry',142,'F'],['f_143.png','Angry',143,'F'],['f_144.png','Angry',144,'F'],['f_145.png','Angry',145,'F'],['f_146.png','Angry',146,'F'],['f_147.png','Angry',147,'F'],['f_148.png','Angry',148,'F'],['f_149.png','Angry',149,'F'],['f_150.png','Angry',150,'F'],['f_151.png','Angry',151,'F'],['f_152.png','Angry',152,'F'],['f_153.png','Angry',153,'F'],['f_154.png','Angry',154,'F'],['f_155.png','Angry',155,'F'],['f_156.png','Angry',156,'F'],['f_157.png','Angry',157,'F'],['f_158.png','Angry',158,'F'],['f_159.png','Angry',159,'F'],['f_160.png','Angry',160,'F'],
        ['f_161.png','Angry',161,'F'],['f_162.png','Angry',162,'F'],['f_163.png','Angry',163,'F'],['f_164.png','Angry',164,'F'],['f_165.png','Angry',165,'F'],['f_166.png','Angry',166,'F'],['f_167.png','Angry',167,'F'],['f_168.png','Angry',168,'F'],['f_169.png','Angry',169,'F'],['f_170.png','Angry',170,'F'],['f_171.png','Angry',171,'F'],['f_172.png','Angry',172,'F'],['f_173.png','Angry',173,'F'],['f_174.png','Angry',174,'F'],['f_175.png','Angry',175,'F'],['f_176.png','Angry',176,'F'],['f_177.png','Angry',177,'F'],['f_178.png','Angry',178,'F'],['f_179.png','Angry',179,'F'],['f_180.png','Angry',180,'F'],
        ['f_181.png','Angry',181,'F'],['f_182.png','Angry',182,'F'],['f_183.png','Angry',183,'F'],['f_184.png','Angry',184,'F'],['f_185.png','Angry',185,'F'],['f_186.png','Angry',186,'F'],['f_187.png','Angry',187,'F'],['f_188.png','Angry',188,'F'],['f_189.png','Angry',189,'F'],['f_190.png','Angry',190,'F'],['f_191.png','Angry',191,'F'],['f_192.png','Angry',192,'F'],['f_193.png','Angry',193,'F'],['f_194.png','Angry',194,'F'],['f_195.png','Angry',195,'F'],['f_196.png','Angry',196,'F'],['f_197.png','Angry',197,'F'],['f_198.png','Angry',198,'F'],['f_199.png','Angry',199,'F'],['f_200.png','Angry',200,'F']];

        Stimuli_M=[['m_000.png','Happy',0,'M'],['m_001.png','Happy',1,'M'],['m_002.png','Happy',2,'M'], ['m_003.png','Happy',3,'M'],['m_004.png','Happy',4,'M'],['m_005.png','Happy',5,'M'],['m_006.png','Happy',6,'M'],['m_007.png','Happy',7,'M'],['m_008.png','Happy',8,'M'],['m_009.png','Happy',9,'M'],['m_010.png','Happy',10,'M'],['m_011.png','Happy',11,'M'],['m_012.png','Happy',12,'M'],['m_013.png','Happy',13,'M'],['m_014.png','Happy',14,'M'],['m_015.png','Happy',15,'M'],['m_016.png','Happy',16,'M'],['m_017.png','Happy',17,'M'],['m_018.png','Happy',18,'M'],['m_019.png','Happy',19,'M'],
        ['m_020.png','Happy',20,'M'],['m_021.png','Happy',21,'M'],['m_022.png','Happy',22,'M'],['m_023.png','Happy',23,'M'],['m_024.png','Happy',24,'M'],['m_025.png','Happy',25,'M'],['m_026.png','Happy',26,'M'],['m_027.png','Happy',27,'M'],['m_028.png','Happy',28,'M'],['m_029.png','Happy',29,'M'],['m_030.png','Happy',30,'M'],['m_031.png','Happy',31,'M'],['m_032.png','Happy',32,'M'],['m_033.png','Happy',33,'M'],['m_034.png','Happy',34,'M'],['m_035.png','Happy',35,'M'],['m_036.png','Happy',36,'M'],['m_037.png','Happy',37,'M'],['m_038.png','Happy',38,'M'],['m_039.png','Happy',39,'M'],
        ['m_040.png','Happy',40,'M'],['m_041.png','Happy',41,'M'],['m_042.png','Happy',42,'M'],['m_043.png','Happy',43,'M'],['m_044.png','Happy',44,'M'],['m_045.png','Happy',45,'M'],['m_046.png','Happy',46,'M'],['m_047.png','Happy',47,'M'],['m_048.png','Happy',48,'M'],['m_049.png','Happy',49,'M'],['m_050.png','Happy',50,'M'],['m_051.png','Happy',51,'M'],['m_052.png','Happy',52,'M'],['m_053.png','Happy',53,'M'],['m_054.png','Happy',54,'M'],['m_055.png','Happy',55,'M'],['m_056.png','Happy',56,'M'],['m_057.png','Happy',57,'M'],['m_058.png','Happy',58,'M'],['m_059.png','Happy',59,'M'],
        ['m_060.png','Happy',60,'M'],['m_061.png','Happy',61,'M'],['m_062.png','Happy',62,'M'],['m_063.png','Happy',63,'M'],['m_064.png','Happy',64,'M'],['m_065.png','Happy',65,'M'],['m_066.png','Happy',66,'M'],['m_067.png','Happy',67,'M'],['m_068.png','Happy',68,'M'],['m_069.png','Happy',69,'M'],['m_070.png','Happy',70,'M'],['m_071.png','Happy',71,'M'],['m_072.png','Happy',72,'M'],['m_073.png','Happy',73,'M'],['m_074.png','Happy',74,'M'],['m_075.png','Happy',75,'M'],['m_076.png','Happy',76,'M'],['m_077.png','Happy',77,'M'],['m_078.png','Happy',78,'M'],['m_079.png','Happy',79,'M'],
        ['m_080.png','Happy',80,'M'],['m_081.png','Happy',81,'M'],['m_082.png','Happy',82,'M'],['m_083.png','Happy',83,'M'],['m_084.png','Happy',84,'M'],['m_085.png','Happy',85,'M'],['m_086.png','Happy',86,'M'],['m_087.png','Happy',87,'M'],['m_088.png','Happy',88,'M'],['m_089.png','Happy',89,'M'],['m_090.png','Happy',90,'M'],['m_091.png','Happy',91,'M'],['m_092.png','Happy',92,'M'],['m_093.png','Happy',93,'M'],['m_094.png','Happy',94,'M'],['m_095.png','Happy',95,'M'],['m_096.png','Happy',96,'M'],['m_097.png','Happy',97,'M'],['m_098.png','Happy',98,'M'],['m_099.png','Happy',99,'M'],
        ['m_101.png','Angry',101,'M'],['m_102.png','Angry',102,'M'],['m_103.png','Angry',103,'M'],['m_104.png','Angry',104,'M'],['m_105.png','Angry',105,'M'],['m_106.png','Angry',106,'M'],['m_107.png','Angry',107,'M'],['m_108.png','Angry',108,'M'],['m_109.png','Angry',109,'M'],['m_110.png','Angry',110,'M'],['m_111.png','Angry',111,'M'],['m_112.png','Angry',112,'M'],['m_113.png','Angry',113,'M'],['m_114.png','Angry',114,'M'],['m_115.png','Angry',115,'M'],['m_116.png','Angry',116,'M'],['m_117.png','Angry',117,'M'],['m_118.png','Angry',118,'M'],['m_119.png','Angry',119,'M'],['m_120.png','Angry',120,'M'],
        ['m_121.png','Angry',121,'M'],['m_122.png','Angry',122,'M'],['m_123.png','Angry',123,'M'],['m_124.png','Angry',124,'M'],['m_125.png','Angry',125,'M'],['m_126.png','Angry',126,'M'],['m_127.png','Angry',127,'M'],['m_128.png','Angry',128,'M'],['m_129.png','Angry',129,'M'],['m_130.png','Angry',130,'M'],['m_131.png','Angry',131,'M'],['m_132.png','Angry',132,'M'],['m_133.png','Angry',133,'M'],['m_134.png','Angry',134,'M'],['m_135.png','Angry',135,'M'],['m_136.png','Angry',136,'M'],['m_137.png','Angry',137,'M'],['m_138.png','Angry',138,'M'],['m_139.png','Angry',139,'M'],['m_140.png','Angry',140,'M'],
        ['m_141.png','Angry',141,'M'],['m_142.png','Angry',142,'M'],['m_143.png','Angry',143,'M'],['m_144.png','Angry',144,'M'],['m_145.png','Angry',145,'M'],['m_146.png','Angry',146,'M'],['m_147.png','Angry',147,'M'],['m_148.png','Angry',148,'M'],['m_149.png','Angry',149,'M'],['m_150.png','Angry',150,'M'],['m_151.png','Angry',151,'M'],['m_152.png','Angry',152,'M'],['m_153.png','Angry',153,'M'],['m_154.png','Angry',154,'M'],['m_155.png','Angry',155,'M'],['m_156.png','Angry',156,'M'],['m_157.png','Angry',157,'M'],['m_158.png','Angry',158,'M'],['m_159.png','Angry',159,'M'],['m_160.png','Angry',160,'M'],
        ['m_161.png','Angry',161,'M'],['m_162.png','Angry',162,'M'],['m_163.png','Angry',163,'M'],['m_164.png','Angry',164,'M'],['m_165.png','Angry',165,'M'],['m_166.png','Angry',166,'M'],['m_167.png','Angry',167,'M'],['m_168.png','Angry',168,'M'],['m_169.png','Angry',169,'M'],['m_170.png','Angry',170,'M'],['m_171.png','Angry',171,'M'],['m_172.png','Angry',172,'M'],['m_173.png','Angry',173,'M'],['m_174.png','Angry',174,'M'],['m_175.png','Angry',175,'M'],['m_176.png','Angry',176,'M'],['m_177.png','Angry',177,'M'],['m_178.png','Angry',178,'M'],['m_179.png','Angry',179,'M'],['m_180.png','Angry',180,'M'],
        ['m_181.png','Angry',181,'M'],['m_182.png','Angry',182,'M'],['m_183.png','Angry',183,'M'],['m_184.png','Angry',184,'M'],['m_185.png','Angry',185,'M'],['m_186.png','Angry',186,'M'],['m_187.png','Angry',187,'M'],['m_188.png','Angry',188,'M'],['m_189.png','Angry',189,'M'],['m_190.png','Angry',190,'M'],['m_191.png','Angry',191,'M'],['m_192.png','Angry',192,'M'],['m_193.png','Angry',193,'M'],['m_194.png','Angry',194,'M'],['m_195.png','Angry',195,'M'],['m_196.png','Angry',196,'M'],['m_197.png','Angry',197,'M'],['m_198.png','Angry',198,'M'],['m_199.png','Angry',199,'M'],['m_200.png','Angry',200,'M']];


        Stimuli = [];

        Emot = ["Happy", "Angry"];
        Emot = shuffle(Emot);


        Emotion = 0;

        Gender=["F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M","F","M"];
        Gender = shuffle(Gender);


        trial_G = 0;
        trial=0

        startVal_Happy = 16;
        startVal_Angry = 185;

        startVal = eval('startVal_'+Emot[Emotion]);
        console.log("startVal ", startVal);

        Stimuli = eval("Stimuli_" + Gender[trial_G]);

        Stim = [];

        Stim=Stimuli[startVal][0];

        Intensity = [];

        corrAns = [];
        Correctness = [];
        Correctness_Int = [];
        Reverse = 0;
        step_sizes=[32,16,8,6,4,2];
        step=step_sizes[0];
  Routine Gen
    TextComponent Gender
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.2
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      text:
        Please choose your gender by pressing the corresponding key:

        f (Female), m (Male)
    KeyboardComponent Gender_key_resp
      allowedKeys = 'f','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    CodeComponent Gender_cd
      Code Type = Auto->JS
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      End Routine:
        if Gender_key_resp.keys == 'f':
            Stimuli = Stimuli_F
        elif Gender_key_resp.keys == 'm':
            Stimuli = Stimuli_M

        # contents = Participants.read()

        Participants = open('Participants.csv', 'a')
        Participants.write(Gender_key_resp.keys+'\n')
        Participants.close()
        print('Participants',Participants)

        Participants = open('Participants.csv', 'r')
        Ppts_allLines = Participants.readlines()
        print('Ppts_allLines',Ppts_allLines)
        No_Ppts_allLines = len(Ppts_allLines)
        print('No_Ppts_allLines',No_Ppts_allLines)
        Participants.close()

        for item in Ppts_allLines:
            if item == 'f\n':
                allFemales = allFemales+1
            elif item == 'm\n':
                allMales = allMales+1

        print("allFemales", allFemales)
        print("allMales", allMales)

        if Gender_key_resp.keys == 'f':
            if allFemales % 2 == 1:
                Emot = ["Happy", "Angry"]
            elif allFemales % 2 == 0:
                Emot = ["Angry", "Happy"]
        elif Gender_key_resp.keys == 'm':
            if allMales % 2 ==1:
                Emot = ["Happy", "Angry"]
            elif allMales % 2 == 0:
                Emot = ["Angry", "Happy"]



        print("Emot", Emot)

        startVal = eval('startVal_'+Emot[Emotion])
        print(startVal)

        Stim=Stimuli[startVal][0]
        print(Stim)
  Routine Brk
    CodeComponent Brk_cd
      Code Type = Both
      Begin JS Routine:
        function shuffle(arra1) {
            var ctr = arra1.length, temp, index;
            while (ctr > 0) {
                index = Math.floor(Math.random() * ctr);
                ctr--;
                temp = arra1[ctr];
                arra1[ctr] = arra1[index];
                arra1[index] = temp;
            }
            return arra1;
        }

        Emotion = Emotion + 1;
        trial = 0;
        trial_G = 0;

        Intensity = [];

        Reverse = 0;
        step=step_sizes[0];

        corrAns = [];

        Correctness = [];
        Correctness_Int = [];

        Gender = shuffle(Gender);


        if (Emotion < 2) {
            startVal = eval("startVal_" + Emot[Emotion]);
            Stim = Stimuli[startVal][0];
        }
      Begin Routine:
        Emotion=Emotion+1
        trial=0
        trial_G=0
        #F_trial=0
        #M_trial=0

        Intensity=[]

        #F_Intensity=[]
        #M_Intensity=[]

        Reverse=0
        step=step_sizes[0]

        #F_Reverse=0
        #M_Reverse=0

        corrAns=[]

        #F_corrAns=[]
        #M_corrAns=[]

        Correctness=[]

        #F_Correctness=[]
        #M_Correctness=[]

        Correctness_Int=[]

        #F_Correctness_Int=[]
        #M_Correctness_Int=[]


        random.shuffle(Gender)
        #print("Gender ", Gender)

        if Emotion < 2:
            startVal=eval('startVal_'+Emot[Emotion])
            Stim=Stimuli[startVal][0]
      Each Frame:
        if Emotion == 2:
            continueRoutine = False
      Each JS Frame:
        if (Emotion === 2) {
            continueRoutine = false;
        }
    TextComponent Brk_text
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Take a short break...

        When you are ready to continue, press Space...
    KeyboardComponent Brk_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Sti
    ImageComponent Stimulus
      image [set every repeat] = $'Stimuli/'+Stim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent empty_Stim
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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  Routine C
    SliderComponent sliderConf
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = ('Unsure','Somewhat sure','Fairly sure','Very sure')
      size = (1.0, 0.03)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      styles = ['rating']
      ticks = (1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79,80,81,82,83,84,85,86,87,88,89,90,91,92,93,94,95,96,97,98,99,100)
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    CodeComponent cd_sliderConf
      Code Type = Auto->JS
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    KeyboardComponent key_sliderConf
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
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    TextComponent sliderConf_Input
      color = red
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.2
      text [set every frame] = $sliderConf.getRating()
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    TextComponent sliderConf_Inp_txt
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      text = Respond using the slider, then press Space to continue...
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    CodeComponent cd_Conf
      Code Type = Both
      Each Frame:
        if key_resp.keys != 'left' and key_resp.keys != 'right':
            continueRoutine=False
      Each JS Frame:
        if ((key_resp.keys !== "left") && (key_resp.keys !== "right")) {
            continueRoutine = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("Intensity", Stimuli[startVal][2]);
        Intensity.push([Stimuli[startVal][2], Stimuli[startVal][1]]);

        if ((key_resp.keys !== "left") && (key_resp.keys !== "right")) {
            corrAns.push('NA');
        } else if ((key_resp.keys === "left") || (key_resp.keys === "right")) {
            if ((key_resp.keys === "left") && (Stimuli[startVal][1] == 'Angry')) {
                corrAns.push(1);
                Correctness.push(1);
                Correctness_Int.push(Intensity[Intensity.length-1][1]);
            } else if ((key_resp.keys === "left") && (Stimuli[startVal][1] == 'Happy')) {
                corrAns.push(0);
                Correctness.push(0);
                Correctness_Int.push(Intensity[Intensity.length-1][1]);
            } else if ((key_resp.keys === "right") && (Stimuli[startVal][1] == 'Happy')) {
                corrAns.push(1);
                Correctness.push(1);
                Correctness_Int.push(Intensity[Intensity.length-1][1]);
            } else if ((key_resp.keys === "right") && (Stimuli[startVal][1] == 'Angry')) {
                corrAns.push(0);
                Correctness.push(0);
                Correctness_Int.push(Intensity[Intensity.length-1][1]);
            }
        }


        if (Intensity[Intensity.length-1][1]=='Angry') {
            if (trial > 0) {
                if ((corrAns[corrAns.length-1] !== 'NA') && (Correctness.length > 1)) {
                    if ((Correctness[Correctness.length-1]===0) && (Correctness[Correctness.length-2]===1) && (Correctness_Int[Correctness_Int.length-2] != 'Happy')) {
                        Reverse=Reverse+1;
                    } else if ((Correctness[Correctness.length-1]===1) && (Correctness[Correctness.length-2]===0)) {
                        Reverse=Reverse+1;
                    } else if ((Correctness[Correctness.length-1]===1) && (Correctness_Int[Correctness_Int.length-2]=='Happy')) {
                        Reverse=Reverse+1;
                    }
                }
            }
        } else if (Intensity[Intensity.length-1][1]=='Happy') {
            if (trial > 0) {
                if ((corrAns[corrAns.length-1] !== 'NA') && (Correctness.length > 1)) {
                    if ((Correctness[Correctness.length-1]===1) && (Correctness[Correctness.length-2]===0)) {
                        Reverse=Reverse+1;
                    } else if ((Correctness[Correctness.length-1]===1) && (Correctness_Int[Correctness_Int.length-2]=='Angry')) {
                        Reverse=Reverse+1;
                    } else if ((Correctness[Correctness.length-1]===0) && (Correctness[Correctness.length-2]===1) && (Correctness_Int[Correctness_Int.length-2] != 'Angry')) {
                        Reverse=Reverse+1;
                    }
                }
            }
        }

        console.log('step before..  ',step);
        if (Reverse <= 5) {
            step=step_sizes[Reverse];
        } else {
            step=step_sizes[step_sizes.length-1];
        }
        console.log('step after..  ',step);

        console.log("before startVal..  ",startVal);

        if ((key_resp.keys === "left") || (key_resp.keys === "right")) {
            if (corrAns[corrAns.length-1] === 1) {
                if (Stimuli[startVal][1] == 'Angry') {
                    startVal = startVal - step;
                } else if (Stimuli[startVal][1] == 'Happy') {
                    startVal = startVal + step;
                }
            } else if (corrAns[corrAns.length-1] === 0) {
                if (Stimuli[startVal][1] == 'Angry') {
                    if ((startVal + step) > 199) {
                        startVal = 199;
                    } else {
                        startVal = startVal + step;
                    }
                } else if (Stimuli[startVal][1] == 'Happy') {
                    if ((startVal - step) < 0) {
                        startVal = 0;
                    } else {
                        startVal = startVal - step;
                    }
                }
            }
        }

        console.log("after startVal..  ",startVal);
      End Routine:
        thisExp.addData('Intensity', Stimuli[startVal][2])
        Intensity.append([Stimuli[startVal][2], Stimuli[startVal][1]]) # Intensity, Emotion category
        #print("Stimuli[startVal][2]..  ", Stimuli[startVal][2])
        #print("Intensity..  ", Intensity)

        if key_resp.keys != 'left' and key_resp.keys != 'right':
            corrAns.append('NA')
        elif key_resp.keys == 'left' or key_resp.keys == 'right':
            if key_resp.keys=='left' and Stimuli[startVal][1]=='Angry':
                corrAns.append(1)
                Correctness.append(1)
                Correctness_Int.append(Intensity[-1][1])
            elif key_resp.keys=='left' and Stimuli[startVal][1]=='Happy':
                corrAns.append(0)
                Correctness.append(0)
                Correctness_Int.append(Intensity[-1][1])   # Correctness_Int.append(Intensity[trial][1]); changed all these
            elif key_resp.keys=='right' and Stimuli[startVal][1]=='Happy':
                corrAns.append(1)
                Correctness.append(1)
                Correctness_Int.append(Intensity[-1][1])
            elif key_resp.keys=='right' and Stimuli[startVal][1]=='Angry':
                corrAns.append(0)
                Correctness.append(0)
                Correctness_Int.append(Intensity[-1][1])

        #print("Correctness..  ", Correctness)
        #print("Correctness_Int..  ", Correctness_Int)

        #if len(Correctness) > 2 and len(Correctness_Int)>2:
        #    print("Correctness[-1]..  ",Correctness[-1])
        #    print("Correctness[-2]..  ",Correctness[-2])
        #    print("Correctness_Int[-2]..  ",Correctness_Int[-2])
        #    print("corrAns[-1]..  ",corrAns[-1])
        #    print("len(Correctness)..  ",len(Correctness))


        if Intensity[-1][1]=='Angry':      # if Emotion category is Angry; Intensity[trial_G][1]==0: changed these
            if trial > 0:
                if (corrAns[-1] != 'NA' and len(Correctness) > 1):
                    #print('condition met')
                    if (Correctness[-1]==0 and Correctness[-2]==1 and Correctness_Int[-2] != 'Happy'):
                        #print("Correctness[-1]..  ",Correctness[-1])
                        #print("Correctness[-2]..  ",Correctness[-2])
                        #print("Correctness_Int[-2]..  ", Correctness_Int[-2])
                        #print("1_Reverse before..  ",Reverse)
                        Reverse=Reverse+1
                        #print("1_Reverse after..  ",Reverse)
                    elif Correctness[-1]==1 and Correctness[-2]==0:
                        #print("2_Reverse before..  ",Reverse)
                        Reverse=Reverse+1
                        #print("2_Reverse after..  ",Reverse)
                    elif Correctness[-1]==1 and Correctness_Int[-2]=='Happy':
                        #print("3_Reverse before..  ",Reverse)
                        Reverse=Reverse+1
                        #print("3_Reverse after..  ",Reverse)
        elif Intensity[-1][1]=='Happy':        # if Emotion category is Happy
            if trial > 0:
                if corrAns[-1] != 'NA' and len(Correctness) > 1:
                    if Correctness[-1]==1 and Correctness[-2]==0:
                        #print("4_Reverse before..  ",Reverse)
                        Reverse=Reverse+1
                        #print("4_Reverse after..  ",Reverse)
                    elif Correctness[-1]==1 and Correctness_Int[-2]=='Angry':
                        #print("5_Reverse before..  ",Reverse)
                        Reverse=Reverse+1
                        #print("5_Reverse after..  ",Reverse)
                    elif (Correctness[-1]==0 and Correctness[-2]==1 and Correctness_Int[-2] != 'Angry'):
                        #print("6_Reverse before..  ",Reverse)
                        Reverse=Reverse+1
                        #print("6_Reverse after..  ",Reverse)

        #print("step before..  ", step)
        if Reverse <= 5:
            step=step_sizes[Reverse]
        else:
            step=step_sizes[-1]
        #print("step after..  ", step)


        print("before startVal..  ",startVal)

        if key_resp.keys == 'left' or key_resp.keys == 'right':
            if corrAns[-1]==1:
                if Stimuli[startVal][1] == 'Angry':
                    startVal=startVal-step
                elif Stimuli[startVal][1] == 'Happy':
                    startVal=startVal+step
            elif corrAns[-1]==0:
                if Stimuli[startVal][1]=='Angry':
                    if (startVal + step) > 199:
                        startVal = 199
                    else:
                        startVal = startVal + step
                elif Stimuli[startVal][1]=='Happy':
                   # print("Conf, End Rout, Stimuli[startVal][1]  ", Stimuli[startVal][1])
                    if (startVal - step) < 0:
                        startVal = 0
                    else:
                        startVal=startVal-step
        print("after startVal..  ",startVal)
    TextComponent Confidence
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3.0
      text = How confident are you in your judgement?
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    PolygonComponent sliderConf_shape
      fillColor = $[1,1,1]
      pos = (0, -0.16)
      shape = rectangle
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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Flow
  Routine Start
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator trials_1 loopType="TrialHandler"
      loopType = random
      nReps = 30
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      Routine Sti
      Routine Ans
      Routine C
      Routine late
      Routine _1_5
    LoopTerminator trials_1
    Routine Brk
  LoopTerminator trials_2
  Routine End
